PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participantID'], expName, expInfo['date'])
  Experiment info = {'participantID': '', 'gender(f=female,m=male)': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 1067]
  expName = 刘雅暄期末作业、
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Routines
  Routine instruction
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        欢迎参加本实验，
        请按空格键继续
    KeyboardComponent key_resp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pra1
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        import random
        p3 = random.random()
        p4 = random.random()
        p5 = random.random()
    ImageComponent image_2
      image = pics\1.png
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image = pics\2.png
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = pics\3.png
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_2,image_3,image_4
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine ins1
    ImageComponent image
      image = pics\inst1.png
      size = 1.7,1
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pra1re
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        import random
        pic2='pics/1.png'
        pic3='pics/2.png'
        pic4='pics/3.png'
        if mouse.getPressed():
         if mouse.isPressedIn(image_2):
                clickresult=random.random()
                if clickresult<p3:
                    pic2='pics/empty.png'
                else:
                    pic2='pics/gift.png'
         elif mouse.isPressedIn(image_3):
                clickresult=random.random()
                if clickresult<p4:
                    pic3='pics/empty.png'
                else:
                    pic3='pics/gift.png'
         elif mouse.isPressedIn(image_4):
                clickresult=random.random()
                if clickresult<p5:
                    pic4='pics/empty.png'
                else:
                    pic4='pics/gift.png'
        continueRoutine=True
    ImageComponent image_22
      image [set every repeat] = $pic2
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent image_5
      image [set every repeat] = $pic3
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent image_6
      image [set every repeat] = $pic4
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine routine_1
  Routine reset
  Routine ins2
    ImageComponent image_7
      image = pics\inst2.png
      size = (1.7, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine praend2
  Routine ins3
    ImageComponent image_20
      image = pics\inst3.png
      size = (1.7, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins4
    ImageComponent image_21
      image = pics\inst4.png
      size = (1.7, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pra2
    ImageComponent image_8
      image = pics\1.png
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_9
      image = pics\2.png
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_10
      image = pics\3.png
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = 84%
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = 40%
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 22%
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    ButtonComponent button
      bold = True
      font = simhei
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.4,0.1)
      startVal [time (s)] = 0
      text = Final choose
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  Routine prachoose2
    ImageComponent image_17
      image = pics\1.png
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_18
      image = pics\2.png
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_19
      image = pics\3.png
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 84%
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 40%
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 22%
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    MouseComponent mouse_2
      clickable = image_17
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine prare2
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        pic2='pics/1.png'
        pic3='pics/2.png'
        pic4='pics/3.png'
        if mouse.getPressed():
           if mouse.isPressedIn(image_17):
            pic2='pics/gift.png'
    ImageComponent image_11
      image [set every repeat] = $pic2
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_12
      image [set every repeat] = $pic3
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_13
      image [set every repeat] = $pic4
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine pra3
    ImageComponent image_23
      image = pics\1.png
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_24
      image = pics\2.png
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_25
      image = pics\3.png
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_8
      letterHeight = 0.05
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = 50%
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = 24%
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    TextComponent text_10
      letterHeight = 0.05
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 12%
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    ButtonComponent button_2
      bold = True
      font = simhei
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.4,0.1)
      startVal [time (s)] = 0
      text = Final choose
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  Routine prachose3
    ImageComponent image_26
      image = pics\1.png
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_27
      image = pics\2.png
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_28
      image = pics\3.png
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_11
      letterHeight = 0.05
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 50%
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    TextComponent text_12
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 24%
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    TextComponent text_13
      letterHeight = 0.05
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text = 12%
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    MouseComponent mouse_3
      clickable = image_26
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine prare3
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        pic2='pics/1.png'
        pic3='pics/2.png'
        pic4='pics/3.png'
        if mouse.getPressed():
           if mouse.isPressedIn(image_17):
            pic2='pics/empty.png'
    ImageComponent image_29
      image [set every repeat] = $pic2
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_30
      image [set every repeat] = $pic3
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_31
      image [set every repeat] = $pic4
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine prare4
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        import random
        pic2='pics/1.png'
        pic3='pics/2.png'
        pic4='pics/3.png'
        if mouse.getPressed():
         if mouse.isPressedIn(image_38):
                clickresult=random.randint(0,100)
                if clickresult<p3:
                    pic2='pics/empty.png'
                else:
                    pic2='pics/gift.png'
         elif mouse.isPressedIn(image_39):
                clickresult=random.randint(0,100)
                if clickresult<p4:
                    pic3='pics/empty.png'
                else:
                    pic3='pics/gift.png'
         elif mouse.isPressedIn(image_40):
                clickresult=random.randint(0,100)
                if clickresult<p5:
                    pic4='pics/empty.png'
                else:
                    pic4='pics/gift.png'
        continueRoutine=True
    ImageComponent image_35
      image [set every repeat] = $pic2
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_36
      image [set every repeat] = $pic3
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_37
      image [set every repeat] = $pic4
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine ins5
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  Routine prare5
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        import random
        pic2='pics/1.png'
        pic3='pics/2.png'
        pic4='pics/3.png'
        if mouse.getPressed():
         if mouse.isPressedIn(image_45):
                clickresult=random.randint(0,100)
                if clickresult<p3:
                    pic2='pics/empty.png'
                else:
                    pic2='pics/gift.png'
         elif mouse.isPressedIn(image_46):
                clickresult=random.randint(0,100)
                if clickresult<p4:
                    pic3='pics/empty.png'
                else:
                    pic3='pics/gift.png'
         elif mouse.isPressedIn(image_47):
                clickresult=random.randint(0,100)
                if clickresult<p5:
                    pic4='pics/empty.png'
                else:
                    pic4='pics/gift.png'
        continueRoutine=True
    ImageComponent image_48
      image [set every repeat] = $pic2
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_49
      image [set every repeat] = $pic3
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_50
      image [set every repeat] = $pic4
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine ins6
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  Routine pra6
    TextComponent text_14
      letterHeight = 0.05
      pos = (0.25, 0.3)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $num
    TextComponent text_15
      letterHeight = 0.05
      pos = (-0.1,0.3)
      startVal [time (s)] = 0.0
      text = 剩余派遣侦察兵次数：
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    ImageComponent image_52
      image = pics\1.png
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_53
      image = pics\2.png
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_54
      image = pics\3.png
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_7
      clickable = image_52,image_53,image_54
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    ButtonComponent button1
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = 0.4,0.1
      startVal [time (s)] = 0
      text [set every frame] = Final Choose
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      callback:
        trials.finished=True
  Routine prare6_1
    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        if button1.isClicked:
            continueRoutine=False
        else:
            continueRoutine=True
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        import random
        pic2='pics/1.png'
        pic3='pics/2.png'
        pic4='pics/3.png'
        if result==1:
                clickresult=random.random()
                if clickresult<p3:
                    pic2='pics/empty.png'
                else:
                    pic2='pics/gift.png'
        elif result==2:
                clickresult=random.random()
                if clickresult<p4:
                    pic3='pics/empty.png'
                else:
                    pic3='pics/gift.png'
        elif result==3:
                clickresult=random.random()
                if clickresult<p5:
                    pic4='pics/empty.png'
                else:
                    pic4='pics/gift.png'
    ImageComponent image_55
      image [set every repeat] = $pic2
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_56
      image [set every repeat] = $pic3
      size = (0.4, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_57
      image [set every repeat] = $pic4
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_9
      Code Type = Auto->JS
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      End Routine:
        num-=1
  Routine prare6_2
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        import random
        pic2='pics/1.png'
        pic3='pics/2.png'
        pic4='pics/3.png'
        if mouse.getPressed():
         if mouse.isPressedIn(image_58):
                clickresult=random.random()
                if clickresult<p3:
                    pic2='pics/empty.png'
                else:
                    pic2='pics/gift.png'
         elif mouse.isPressedIn(image_59):
                clickresult=random.random()
                if clickresult<p4:
                    pic3='pics/empty.png'
                else:
                    pic3='pics/gift.png'
         elif mouse.isPressedIn(image_60):
                clickresult=random.random()
                if clickresult<p5:
                    pic4='pics/empty.png'
                else:
                    pic4='pics/gift.png'
        continueRoutine=True
    ImageComponent image_61
      image [set every repeat] = $pic2
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_62
      image [set every repeat] = $pic3
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_63
      image [set every repeat] = $pic4
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine setp
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        import random
        p3 = random.random()
        p4 = random.random()
        p5 = random.random()
      End Routine:
        num=10
  Routine praend
  Routine feedback
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        if num>0:
            trials_2.finished=True
            if mouse.isPressedIn(image_52):
                result=1
            if mouse.isPressedIn(image_53):
                result=2
            if mouse.isPressedIn(image_54):
                result=3
        if num==0:
            if button1.isClicked:
                trials_2.finished=True
                trials.finished=True
            else:
                trials_2.finished=False
        continueRoutine=False
  Routine ins7
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  Routine ins8
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  Routine pra7
    TextComponent text_16
      letterHeight = 0.05
      pos = (0.25, 0.3)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $num
    TextComponent text_17
      letterHeight = 0.05
      pos = (-0.1,0.3)
      startVal [time (s)] = 0.0
      text = 剩余派遣侦察兵次数：
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    ImageComponent image_65
      image = pics\1.png
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_66
      image = pics\2.png
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_67
      image = pics\3.png
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_9
      clickable = image_65,image_66,image_67
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    ButtonComponent button1_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = 0.4,0.1
      startVal [time (s)] = 0
      text [set every frame] = Final Choose
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      callback:
        trials77.finished=True
  Routine feedback2
    CodeComponent code_14
      Code Type = Auto->JS
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      Each Frame:
        if num>0:
            trials66.finished=True
            if mouse.isPressedIn(image_65):
                result=1
            if mouse.isPressedIn(image_66):
                result=2
            if mouse.isPressedIn(image_67):
                result=3
        if num==0:
            if button1_2.isClicked:
                trials66.finished=True
                trials77.finished=True
            else:
                trials66.finished=False
        continueRoutine=False
  Routine prare7_1
    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        if button1_2.isClicked:
            continueRoutine=False
        else:
            continueRoutine=True
    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        import random
        pic2='pics/1.png'
        pic3='pics/2.png'
        pic4='pics/3.png'
        if result==1:
                clickresult=random.random()
                if clickresult<p3:
                    pic2='pics/empty.png'
                else:
                    pic2='pics/gift.png'
        elif result==2:
                clickresult=random.random()
                if clickresult<p4:
                    pic3='pics/empty.png'
                else:
                    pic3='pics/gift.png'
        elif result==3:
                clickresult=random.random()
                if clickresult<p5:
                    pic4='pics/empty.png'
                else:
                    pic4='pics/gift.png'
    ImageComponent image_68
      image [set every repeat] = $pic2
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_69
      image [set every repeat] = $pic3
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_70
      image [set every repeat] = $pic4
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_16
      Code Type = Auto->JS
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      End Routine:
        num-=1
  Routine pra6chose
    ImageComponent image_58
      image = pics\1.png
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_59
      image = pics\2.png
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_60
      image = pics\3.png
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_8
      clickable = image_58,image_59,image_60
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine pra7chose
    ImageComponent image_71
      image = pics\1.png
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_72
      image = pics\2.png
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_73
      image = pics\3.png
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_10
      clickable = image_71,image_72,image_73
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine prare7__
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        import random
        pic2='pics/1.png'
        pic3='pics/2.png'
        pic4='pics/3.png'
        if result==1:
                clickresult=random.random()
                if clickresult<p3:
                    pic2='pics/empty.png'
                else:
                    pic2='pics/gift.png'
        elif result==2:
                clickresult=random.random()
                if clickresult<p4:
                    pic3='pics/empty.png'
                else:
                    pic3='pics/gift.png'
        elif result==3:
                clickresult=random.random()
                if clickresult<p5:
                    pic4='pics/empty.png'
                else:
                    pic4='pics/gift.png'
        continueRoutine=True
    ImageComponent image_74
      image [set every repeat] = $pic2
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_75
      image [set every repeat] = $pic3
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_76
      image [set every repeat] = $pic4
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine confidence
    CodeComponent code_7
      Code Type = Auto->JS
      Begin Routine:
        if mouse.getPressed():
         if mouse.isPressedIn(image_71):
            result=1
         if mouse.isPressedIn(image_72):
            result=2
         if mouse.isPressedIn(image_73):
            result=3
    PolygonComponent polygon
      lineColor = red
      lineWidth = 20
      pos [set every frame] = (x, 0)
      shape = regular polygon...
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Each Frame:
        if mouse.getPressed():
         if mouse.isPressedIn(image_71):
                x=-0.5
         elif mouse.isPressedIn(image_72):
                x=0
         elif mouse.isPressedIn(image_73):
                x=0.5
    ImageComponent image_77
      image = pics\1.png
      pos = (-0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_78
      image = pics\2.png
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_79
      image = pics\3.png
      pos = (0.5, 0)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = 0,50,100
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2,3)
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    ButtonComponent button_3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.45)
      size = 0.5,0.1
      startVal [time (s)] = 0
      text = My confidence
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  Routine ins9
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Flow
  Routine instruction
  Routine ins1
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine pra1
    Routine pra1re
  LoopTerminator trials_3
  Routine ins2
  Routine pra2
  Routine prachoose2
  Routine prare2
  Routine ins3
  Routine pra3
  Routine prachose3
  Routine prare3
  Routine ins4
  Routine ins5
  Routine ins6
  Routine ins7
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine setp
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 11
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      LoopInitiator trials_2 loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 99
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        Routine pra6
        Routine feedback
      LoopTerminator trials_2
      Routine prare6_1
    LoopTerminator trials
    Routine pra6chose
    Routine prare6_2
  LoopTerminator trials_4
  Routine ins8
  LoopInitiator trials_5 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine setp
    LoopInitiator trials77 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 11
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      LoopInitiator trials66 loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 99
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        Routine pra7
        Routine feedback2
      LoopTerminator trials66
      Routine prare7_1
    LoopTerminator trials77
    Routine pra7chose
    Routine confidence
    Routine prare7__
  LoopTerminator trials_5
  Routine ins9
